PsychoPy2experiment version="2025.1.1"
Settings
  expName = visual search exp 2026
  Audio lib = ptb
  runMode = 1
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = False
  Window size (pixels) = [1536,864]
  Units = height
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  Save excel file = True
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if random() > 0.5:
            num_distr = 10
        else:
            num_distr = 5

        thisExp.addData('num_distr', num_distr)

        distractors = []
        for i in range(num_distr):
            distr = visual.TextStim(
                win=win,
                name=f'distr_{i}',
                text='L',
                font='Open Sans',
                pos=(random()-0.5, random()-0.5),
                height=0.1,
                wrapWidth=None,
                ori=randint(1, 360),
                color='white',
                colorSpace='rgb',
                opacity=None,
                languageStyle='LTR',
                depth=0.0
            )
            distractors.append(distr)

        for distr in distractors:
            distr.setAutoDraw(True)
      End Routine:
        for distr in distractors:
            distr.setAutoDraw(False)
    PolygonComponent fixation
      startVal [time (s)] = 0.0
      fillColor = white
      size = (0.1, 0.1)
      shape = cross
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    TextComponent target
      startVal [time (s)] = 0.0
      pos [set every repeat] = (random()-0.5 , random ()-0.5)
      text = T
      letterHeight = 0.01
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    MouseComponent mouse
      startVal [time (s)] = 0.0
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      clickable = target
      storeCorrect = True
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 200
    endPoints = [0,1]
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    Routine trial
  LoopTerminator trials
